PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = MusicProblemSolving
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine Instructions
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    TextComponent Text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!
        You will solve a series of problems under three conditions:
        - Silence
        - Instrumental Music
        - Lyrical Music
        Try to solve each problem as quickly and accurately as possible. Press SPACE to begin. For the next question press the 'right' arrow key.

        (Note: Please answer all the questions verbally including numerical answers.)
    KeyboardComponent instructn_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Trials
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    TextComponent Problemtext
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $ProblemText
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    TextboxComponent ResponseBox
      bold = False
      editable = True
      letterHeight = 0.05
      placeholder = Type your answer here
      pos = (0, -0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent Enter_resp
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SoundComponent BackgroundMusic
      sound [set every repeat] = $music
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      End Routine:
        # Ensure response and answer are properly formatted
        participant_response = ResponseBox.text.strip().lower()
        correct_answer = str(answer).strip().lower()

        # Check accuracy
        if participant_response == correct_answer:
            correct = 1  # Correct response
        else:
            correct = 0  # Incorrect response

        # Debugging output
        print(f"Participant Response: {participant_response}, Correct Answer: {correct_answer}, Accuracy: {correct}")

        # Save data
        thisExp.addData('Correct', correct)
        thisExp.addData('Participant Response', participant_response)
        thisExp.addData('Correct Answer', correct_answer)
  Routine Break
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = You can take a short break. Press SPACE to continue. 
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Instructions
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = CondFile_2.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Music', 'Music\\silence.wav')]),
      OrderedDict([('Music', 'Music\\Instrumental.wav')]),
      OrderedDict([('Music', 'Music\\Lyrical.wav')])]
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = Cond_File_1.csv
      loopType = random
      nReps = 5
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      conditions:
        [OrderedDict([('condition', 'silence'), ('ProblemText', 'What_is_the_capital_of_France?'), ('answer', 'paris'), ('music', 'Music\\silence.wav')]),
        OrderedDict([('condition', 'instrumental '), ('ProblemText', 'Solve_: _5+(3*2)-4'), ('answer', 'seven'), ('music', 'Music\\Instrumental.wav')]),
        OrderedDict([('condition', 'lyrical'), ('ProblemText', 'Unscramble_the_word:_EPLPA'), ('answer', 'apple'), ('music', 'Music\\Lyrical.wav')]),
        OrderedDict([('condition', 'silence'), ('ProblemText', 'How_many_sides_does_a_hexagon_have?'), ('answer', 'six'), ('music', 'Music\\silence.wav')]),
        OrderedDict([('condition', 'instrumental '), ('ProblemText', 'Who_wrote_"Romeo_and_Juliet"?'), ('answer', 'shakesphere'), ('music', 'Music\\Instrumental.wav')]),
        OrderedDict([('condition', 'lyrical'), ('ProblemText', 'Solve_for_x:__2x+4=12'), ('answer', 'four'), ('music', 'Music\\Lyrical.wav')]),
        OrderedDict([('condition', 'silence'), ('ProblemText', 'What_is_the_square_root_of_144?'), ('answer', 'twelve'), ('music', 'Music\\silence.wav')]),
        OrderedDict([('condition', 'instrumental '), ('ProblemText', 'Rearrange_to_form_a_country:__Dlieh'), ('answer', 'delhi'), ('music', 'Music\\Instrumental.wav')]),
        OrderedDict([('condition', 'lyrical'), ('ProblemText', 'What_color_do_you_get_when_you_mix_blue_and_yellow?'), ('answer', 'green'), ('music', 'Music\\Lyrical.wav')])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
      Routine Trials
      Routine Break
    LoopTerminator trials
  LoopTerminator trials_2
